graphs:

  - id: Broker
    nodes:
    - id: proxy
      module: timeflux.nodes.zmq
      class: Broker

  - id: OpenBCI
    nodes:
    - id: acquire
      module: timeflux_openbci.nodes.driver
      class: OpenBCI
      params:
        board: cyton
        serial_port: /dev/cu.usbserial-DQ0084BO
        channels: [ Fpz, AF7, AF8, Oz, O1, O2, P7, P8 ] # Rename EEG channels
        disable: [ 2 ] # Disable channel 2
        gain: 8
        debug: true
    - id: display
      module: timeflux.nodes.debug
      class: Display
    - id: pub
      module: timeflux.nodes.zmq
      class: Pub
      params:
        topic: openbci
    edges:
    - source: acquire
      target: pub
    rate: 10

  - id: Monitor
    nodes:
    - id: sub
      module: timeflux.nodes.zmq
      class: Sub
      params:
        topics: [ openbci ]
    - id: bandpass
      module: timeflux_dsp.nodes.filters
      class: IIRFilter
      params:
        rate: 250
        order: 3
        frequencies: [1, 40]
    - id: ui
      module: timeflux_ui.nodes.ui
      class: UI
    edges:
      - source: sub:openbci
        target: bandpass
      - source: bandpass
        target: ui:openbci
    rate: 10
